<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="q1:CsvReader">
        <q1:FileName>world.csv</q1:FileName>
        <q1:ScanPattern>%t</q1:ScanPattern>
      </Expression>
      <Expression xsi:type="q1:CsvReader">
        <q1:FileName>eye.csv</q1:FileName>
        <q1:ScanPattern>%t</q1:ScanPattern>
      </Expression>
      <Expression xsi:type="q2:ExpressionTransform">
        <q2:Expression>new(0 as stream, it as time)</q2:Expression>
      </Expression>
      <Expression xsi:type="q2:ExpressionTransform">
        <q2:Expression>new(1 as stream, it as time)</q2:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ToList" />
      </Expression>
      <Expression xsi:type="q2:PythonSelectMany">
        <q2:Script>import clr
import time
clr.AddReference("System.Core")
from System.Linq import Enumerable

@returns(int)
def process(value):
  for c in Enumerable.OrderBy(value, lambda x:x.time):
    yield c.stream</q2:Script>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Cam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Cam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:FileCapture">
          <q3:FileName>world.avi</q3:FileName>
          <q3:PlaybackRate>0</q3:PlaybackRate>
          <q3:StartPosition>0</q3:StartPosition>
          <q3:PositionUnits>Frames</q3:PositionUnits>
          <q3:Loop>false</q3:Loop>
          <q3:Playing>true</q3:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:FileCapture">
          <q3:FileName>eye.avi</q3:FileName>
          <q3:PlaybackRate>0</q3:PlaybackRate>
          <q3:StartPosition>0</q3:StartPosition>
          <q3:PositionUnits>Frames</q3:PositionUnits>
          <q3:Loop>false</q3:Loop>
          <q3:Playing>true</q3:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Resize">
          <q3:Size>
            <q3:Width>853</q3:Width>
            <q3:Height>480</q3:Height>
          </q3:Size>
          <q3:Interpolation>Linear</q3:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val2</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>80000000</Value>
        </Operand>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ToList, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonSelectMany, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Sum, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>